PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  color = $[-1,-1,-1]
  expName = 6_SlowBreathingSYMTask
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine slow_breathing_image
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    ImageComponent image_1
      image = ./images/SYM_SlowBreathingTask.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 178
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        #Before Routine
        ### START ROUTINE SBASODI1 (Breathing Image)
        hf.task_trigger(value="11", port=port, outlet=outlet, desc="Breathing Image")
      End Routine:
        #End Routine
        ### END ROUTINE SBASODI1 (Breathing Image)
        hf.task_trigger(value="12", port=port, outlet=outlet, desc="Breathing Image")
  Routine slow_breathing_video
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    MovieComponent breathing_video
      backend = ffpyplayer
      forceEndRoutine = False
      movie = ./videos/SYM_BreathingVideoEdited_subtitles_banner.mp4
      size = (1.6, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 242
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    CodeComponent code
      Code Type = Py
      Before Experiment:
        ##BEFORE EXPERIMENT
        import my_eeg_fmri_helper_functions as hf
      Begin Routine:
        #Before Routine
        ### START ROUTINE SBASODI1 (VIDEO START)
        hf.task_trigger(value="9", port=port, outlet=outlet, desc="Video start")
      End Routine:
        #End Routine
        ### END ROUTINE SBASODI1 (VIDEO END)
        hf.task_trigger(value="10", port=port, outlet=outlet, desc="Video end")
  Routine dummy_start
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    TextComponent text
      letterHeight = 0.8
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    CodeComponent code_3
      Code Type = Py
      Each Frame:
        text.text = 10-int(t)
  Routine dummy_end
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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Flow
  Routine dummy_start
  Routine slow_breathing_video
  Routine slow_breathing_image
  Routine dummy_end
